PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = crave_crush
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 10.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 10.0
      startVal [time (s)] = 10.0
      image = stimuli/Milkshake.jpg
      size = [0.5, 0.5]
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    RatingScaleComponent rating
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 20.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      stopVal [duration (s)] = 5
      scaleDescription = Rate your craving from 1 - 5
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    ImageComponent image_2
      stopVal [duration (s)] = 5
      startVal [time (s)] = 20
      size = [0.5, 0.5]
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    TextComponent fixation_2
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 25
      letterHeight = 0.1
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Flow
  Routine trial
